PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = BreathHold
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Routines
  Routine trial
    TextComponent breathe
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 38
      text = Normal Atmen
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    TextComponent get_ready
      letterHeight = 0.1
      startVal [time (s)] = 38
      stopVal [duration (s)] = 2
      text = Bereitmachen
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    TextComponent inspire
      letterHeight = 0.1
      startVal [time (s)] = 40
      stopVal [duration (s)] = 4
      text = Einatmen
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    TextComponent hold_breath
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 16
      text = Atem anhalten
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  Routine end_breathe
    TextComponent breathe1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Normal atmen
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine trial
  LoopTerminator trials
  Routine end_breathe
